PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u'', u'counterbalance': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  expName = simon
  Screen = 1
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Routines
  Routine simonTrial
    TextComponent leftStim
      text [set every repeat] = $leftStimText
      stopVal [duration (s)] = 1.0
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent rightStim
      text [set every repeat] = $rightStimText
      stopVal [duration (s)] = 1.0
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent ITI
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      image = /Users/mridul/Downloads/fixation.png
      size = (0.5, 0.5)
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    KeyboardComponent response
      correctAns = $ans
      storeCorrect = True
      stopVal [duration (s)] = 1.8
      forceEndRoutine = False
      allowedKeys = 'z','m'
      startVal [time (s)] = 0.2
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    TextComponent fixation
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine setup
    CodeComponent simonConfig
      Begin Routine:
        if expInfo['counterbalance']=='0':
         bindings = {'X':'m', 'O':'z'}
         if thisTrial['condition']=='incongruent' and thisTrial['stim']=='X':
          leftStimText = thisTrial['stim']
          rightStimText = ''
          ans = 'm'
         elif thisTrial['condition']=='incongruent' and thisTrial['stim']=='0':
          rightStimText = thisTrial['stim']
          leftStimText = ''
          ans = 'z'

         elif thisTrial['condition']=='congruent' and thisTrial['stim']=='X':
          rightStimText = thisTrial['stim']
          leftStimText = ''
          ans = 'm'
         elif thisTrial['condition']=='congruent' and thisTrial['stim']=='0':
          leftStimText = thisTrial['stim']
          rightStimText = ''
          ans = 'z'
        elif expInfo['counterbalance']=='1':
         bindings = {'X':'z', 'O':'m'}
         if thisTrial['condition']=='incongruent' and thisTrial['stim']=='X':
          rightStimText = thisTrial['stim']
          leftStimText = ''
          ans = 'z'
         elif thisTrial['condition']=='incongruent' and thisTrial['stim']=='0':
          leftStimText = thisTrial['stim']
          rightStimText = ''
          ans = 'm'

         elif thisTrial['condition']=='congruent' and thisTrial['stim']=='X':
          leftStimText = thisTrial['stim']
          rightStimText = ''
          ans = 'z'
         elif thisTrial['condition']=='congruent' and thisTrial['stim']=='0':
          rightStimText = thisTrial['stim']
          leftStimText = ''
          ans = 'm'
  Routine Instructions
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        SIMON TASK

        allowed keys = 'm', 'z'

        if Correlation = 0
        X = right
        O = left

        if Correlation = 1
        X = left
        O = right
    KeyboardComponent instrResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment.csv
    loopType = sequential
    nReps = 3
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    conditions:
      [OrderedDict([(u'condition', u'incongruent'), (u'stim', u'X')]),
      OrderedDict([(u'condition', u'congruent'), (u'stim', u'X')]),
      OrderedDict([(u'condition', u'incongruent'), (u'stim', u'O')]),
      OrderedDict([(u'condition', u'congruent'), (u'stim', u'O')])]
    Routine setup
    Routine simonTrial
  LoopTerminator trials
