PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = stroop
  Screen = 1
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = $color
      text [set every repeat] = $word
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent response
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'down','left','right'
      startVal [time (s)] = 0.5
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  Routine instructions
    TextComponent instrText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        STROOP TASK

        Remember, choose the color of the letters ignoring the word

        left = red
        down = green
        right = blue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([(u'word', u'red'), (u'color', u'red'), (u'congruent', 1), (u'corrAns', u'left')]),
      OrderedDict([(u'word', u'red'), (u'color', u'green'), (u'congruent', 0), (u'corrAns', u'down')]),
      OrderedDict([(u'word', u'green'), (u'color', u'green'), (u'congruent', 1), (u'corrAns', u'down')]),
      OrderedDict([(u'word', u'green'), (u'color', u'blue'), (u'congruent', 0), (u'corrAns', u'right')]),
      OrderedDict([(u'word', u'blue'), (u'color', u'blue'), (u'congruent', 1), (u'corrAns', u'right')]),
      OrderedDict([(u'word', u'blue'), (u'color', u'red'), (u'congruent', 0), (u'corrAns', u'left')])]
    Routine trial
  LoopTerminator trials
